//base_path = "D:/Documents_D/Rojas_lab/data";
//base_path = "/Users/felixbarber/Documents/Rojas_lab/data";
//base_path = "/Volumes/data_ssd1/Rojas_Lab/data";
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";
//
expt_id="/250626_bFB66_tun_lysis";
num_channels = 2;
scene_nums =3;
base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//
//expt_id="/250612_bFB66_s750_tun_gr";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";
//
//expt_id="/250613_bFB66_s750_tun_gr";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250617_bFB319_tun_gr_rep2";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250617_bFB319_tun_gr";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250522_bFB66_s750_tun_gr";
//num_channels = 2;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250520_bFB66_s750_tun_gr";
//num_channels = 2;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";


//expt_id="/250514_bFB69_LB_pad_rep2";
//num_channels = 1;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250514_bFB69_LB_pad";
//num_channels = 1;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250515_bFB66_LB_pad";
//num_channels = 1;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250515_bFB66_tun_pad";
//num_channels = 1;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250519_bFB7_tun_gr";
//num_channels = 2;
//scene_nums =2;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250513_bFB66_s750_tun_gr_p2";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//
//expt_id="/250513_bFB66_s750_tun_gr";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250512_bFB66_tun_pad";
//num_channels = 1;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250512_bFB66_LB_pad";
//num_channels = 1;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250509_bFB66_pad_LB";
//num_channels = 2;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250508_bFB69_pad_LB";
//num_channels = 2;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250508_bFB66_pad_LB";
//num_channels = 2;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250507_bFB66_pad_tun_v2";
//num_channels = 2;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250506_bFB66_pad_tun";
//num_channels = 2;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250505_bFB66_pad_LB";
//num_channels = 2;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250408_bFB291_IPTG_induction";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250402_bFB66_LB";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250403_bFB292_IPTG_induction";
//num_channels = 2;
//scene_nums =2;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250326_bFB295_IPTG_induction";
//num_channels = 2;
//scene_nums =3;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250325_bFB293_IPTG_induction";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";


//expt_id="/250324_bFB291_IPTG_induction";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250227_bFB87_Tun_PBS_long_incubation_45min";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";


//expt_id="/250226_bFB66_Tun_PBS_long_incubation_45min";
//num_channels = 2;
//scene_nums =3;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250225_bFB66_Tun_PBS_long_incubation_30min";
//num_channels = 2;
//scene_nums =2;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250224_bFB66_Tun_BufferA_long_incubation";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";


//expt_id="/250221_bFB69_Tun_PBS_long_incubation";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250219_bFB66_Spp1_300ug_LB";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250220_bFB66_Tun_PBS_long_incubation";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250218_bFB66_PBS_long_incubation";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250213_bFB8_PBS_BufferA_recovery";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/250213_bFB8_25uMGlpQ_recovery";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";


//expt_id="/181207_yFB79_60X_Raff_125uMGal";
//num_channels = 2;
//scene_nums =1;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/241202_bFB7_25uMGlpQ_recovery";
//num_channels = 2;
//scene_nums =3;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";


//expt_id="/241201_bFB93_40uMGlpQ_recovery";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/241201_bFB93_25uMGlpQ_recovery";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/241130_bFB93_25uMGlpQ_recovery";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/241129_bFB87_25uMGlpQ_recovery";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/241126_bFB69_Tun_gr";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/241115_bFB87_GlpQ_recovery";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";
//
//expt_id="/241007_bFB69_GlpQ_LB";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240927_bFB69_Tun_gr";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240926_bFB7_Tun_gr";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240925_bFB93_40uMGlpQ_recovery_v2";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";


//expt_id="/240925_bFB93_40uMGlpQ_recovery";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240925_bFB7_Tun_gr";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240920_bFB93_40uMGlpQ_recovery";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";


//expt_id="/240920_bFB93_PBS_recovery";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240920_bFB93_GlpQ_Recovery";
//num_channels = 2;
//scene_nums =4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";


//expt_id="/240918_bFB87_PBS_recovery";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";


//expt_id="/240918_bFB87_GlpQ_recovery";
//num_channels = 2;
//scene_nums =5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240901_bFB66_30minPBS_recovery_run2";
//num_channels = 2;
//scene_nums = 4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240901_bFB66_30minPBS_recovery";
//num_channels = 2;
//scene_nums = 5;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240807_bF66_40uMGlpQ_recovery";
//num_channels = 2;
//scene_nums = 4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240729_bFB69_Tun_lysis";
//num_channels = 2;
//scene_nums = 4;
//base_path = "/Volumes/data_ssd1/Rojas_Lab/data";


//
//expt_id="/230317_bFB69_Tun_Lysis";
//num_channels = 2;
//scene_nums = 6;
//base_path = "/Volumes/data_ssd1/Rojas_Lab/data";

//expt_id="/240725_bFB66_40uM_GlpQ_recovery";
//num_channels = 2;
//scene_nums = 4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240724_bFB69_25uM_GlpQ_recovery";
//num_channels = 2;
//scene_nums = 4;
//base_path = "/Volumes/data_ssd2/Rojas_Lab/data";

//expt_id="/240724_bFB66_25uM_GlpQ_recovery";
//num_channels = 2;
//scene_nums = 5;

//

//expt_id="/240724_bFB66_29uM_GlpQ_recovery";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/240612_bFB260_degron_tester_500uMIPTG002";
//num_channels = 2;
//scene_nums = 2;

//expt_id="/240528_bFB69_BufferA_500mMSorbitol";
//num_channels = 2;
//scene_nums = 5;


//expt_id="/240528_bFB69_GlpQ_500mMSorbitol";
//num_channels = 2;
//scene_nums = 5;


//expt_id="/240527_bFB66_BufferA_tester";
//num_channels = 2;
//scene_nums = 5;


//expt_id="/240527_bFB66_GlpQ_tester";
//num_channels = 2;
//scene_nums = 5;


//expt_id="/240523_bFB69_BufferA_tester";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/240523_bFB69_GlpQ_tester";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/240503_bFB69_GlpQ_tester";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/210128_FB2_Tun_response";
//scene_nums = 5;
//num_channels = 2;

//expt_id="/240311_bFB69_PBS_GlpQ_conc_recovery";
//num_channels = 2;
//scene_nums = 2;

//expt_id="/231129_bFB69_PBS_BufferA_500mMSorbitol_15min_recovery";
//num_channels = 2;
//scene_nums = 5;


//expt_id="/240111_bFB66_Tun_500mMSorbitol_test";
//num_channels = 2;
//scene_nums = 4;

//expt_id="/231119_bFB69_PBS_BufferA_500mMSorbitol_recovery_15min_ZPBS";
//num_channels = 2;
//scene_nums = 5;


//expt_id="/231117_bFB69_PBS_GlpQ_500mMSorbitol_recovery_15min_ZPBS";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231115_bFB69_PBS_BufferA_recovery_15min_ZPBS";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231110_bFB6_Xylose_depletion";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231110_bFB69_PBS_GlpQ_500mMSorbitol_recovery_15min_ZPBS";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231108_bFB69_PBS_GlpQ_recovery_15min_ZPBS";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231105_bFB69_PBS_BufferA_500mMSorbitol_recovery_15min";
//num_channels = 2;
//scene_nums = 5;


//expt_id="/231103_bFB66_PBS_denatGlpQ_recovery_15min";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231103_bFB69_PBS_GlpQ_500mMSorbitol_recovery_15min";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231030_bFB66_PBS_BufferA_recovery_30min";
//num_channels = 2;
//scene_nums = 5;


//expt_id="/231030_bFB69_PBS_BufferA_recovery_30min";
//num_channels = 2;
//scene_nums = 5;


//expt_id="/231027_bFB69_PBS_BufferA_recovery_15min";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/210731_FB2_GlpQ_Response_10uM";
//num_channels = 2;
//scene_nums = 7;

//expt_id="/210916_bFB1_PBS_teichoicase_recovery";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/210916_bFB1_PBS_recovery";
//num_channels = 2;
//scene_nums = 8;


//
//expt_id="/231018_bFB69_PBS_BufferA_recovery_15min";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231018_bFB69_PBS_GlpQ_recovery_15min";
//num_channels = 2;
//scene_nums = 5;


//expt_id="/231012_bFB69_PBS_GlpQ_recovery_15min";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231011_bFB66_PBS_GlpQ_recovery_15min";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231005_bFB66_PBS_GlpQconst_recovery";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231004_bFB69_PBS_BufferA_recovery_15min";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231004_bFB69_PBS_BufferA_recovery_15min";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/231004_bFB66_PBS_GlpQ_recovery_15min";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/230926_bFB66_PBS_GlpQdenat_recovery_15min";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/230926_bFB66_PBS_GlpQ_recovery_15min";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/230921_bFB66_PBS_BufferA_recovery_15min";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/230921_bFB66_PBS_GlpQ_recovery_15min";
//num_channels = 2;
//scene_nums = 6;


//expt_id="/230825_bFB66_PBS_recovery_15min";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/230825_bFB66_PBS_recovery";
//num_channels = 1;
//scene_nums = 6;


//expt_id="/230404_bER47_Tun";
//num_channels = 2;
//scene_nums = 5;


//expt_id = "/200928_BS_tun_test";

//expt_id = "/201013_BS_tun_fos";
//expt_id = "/201023_BS_cerulenin";
//expt_id="/201112_BS_tun_fos_simult";
//expt_id="/201112_BS_tun_fos_delay";
//expt_id="/201115_BS_fos";
//scene_nums = 5;
//alignment_scene =1;
//num_timesteps = 271;
//num_channels = 2;
//expt_id="/201115_BS_fos_recovery";
//scene_nums = 5;
//alignment_scene = 3;
//num_timesteps = 271;
//expt_id="/201120_LM_fos";
//scene_nums = 9;
//alignment_scene = 9;
//num_timesteps = 226;

//
//expt_id="/201121_LM_tun";
//scene_nums = 10;
//alignment_scene = 10;
//num_timesteps = 271;

//expt_id="/210108_BS_tun";
//scene_nums = 3;
//alignment_scene = 3;
//num_timesteps = 533;
//num_channels = 2;

//expt_id="/210128_FB2_Tun_response";
//scene_nums = 5;
//alignment_scene = 1;
//num_timesteps = 271;
//num_channels = 2;

//expt_id="/210212_FB1_LB_Tun_response";
//scene_nums = 5;
//alignment_scene =2;
//num_timesteps = 199;
//num_channels = 2;


//expt_id="/210217_FB1_ER43_LB_HADA_expt1";
//scene_nums = 5;
//alignment_scene =2;
//num_timesteps = 49;
//num_channels = 2;


//expt_id="/191216_Paola_CRISPRi_TagO";
//scene_nums = 4;
//alignment_scene =4;
//num_timesteps = 120;
//num_channels = 2;
//
//expt_id="/210401_BS168_LB_HADA";
//scene_nums = 8;
//alignment_scene =1;
//num_timesteps = 127;
//num_channels = 2;

//expt_id="/210304_FB1_LB_Tun_response_HADA";
//scene_nums = 6;
//alignment_scene =6;
//num_timesteps = 199;
//num_channels = 2;

//expt_id="/210416_FB2_Tun_response";
//scene_nums = 5;
//alignment_scene =1;
//num_timesteps = 151;
//num_channels = 2;

//
//expt_id="/210401_BS168_Tun_HADA_expt4";
//num_channels = 2;
//scene_nums = 5;
//alignment_scene=1;
//num_timesteps=127;
//
//
//expt_id="/210429_FB6_inducer_loss";
//num_channels = 2;
//scene_nums = 6;
//alignment_scene=1;
//num_timesteps=277;
//
//expt_id="/210506_FB6_inducer_loss_timelapse";
//num_channels = 2;
//scene_nums = 6;
//alignment_scene=1;
//num_timesteps=295;

//expt_id="/210507_FB1_Tun_Mg";
//num_channels = 2;
//scene_nums = 7;
//alignment_scene=2;
//num_timesteps=196;
//
//expt_id="/210718_FB1_Tun_Response";
//num_channels = 2;
//scene_nums = 3;
//alignment_scene=2;
//num_timesteps=136;


//expt_id="/210718_FB7_Tun_Response";
//num_channels = 2;
//scene_nums = 5;
//alignment_scene=3;
//num_timesteps=181;

//expt_id="/210718_FB8_Tun_Response";
//num_channels = 2;
//scene_nums = 5;
//alignment_scene=2;
//num_timesteps=181;

//expt_id="/210723_FB8_Tun_Response";
//num_channels = 2;
//scene_nums = 8;


//expt_id="/210723_FB7_Tun_Response";
//num_channels = 2;
//scene_nums = 7;


//expt_id="/210723_FB1_Tun_Response";
//num_channels = 2;
//scene_nums = 7;



//expt_id="/210916_bFB1_PBS_recovery";
//num_channels = 2;
//scene_nums = 8;
//num_timesteps=211;

//expt_id="/210916_bFB1_PBS_teichoicase_recovery";
//num_channels = 2;
//scene_nums = 6;
//num_timesteps=271;

//expt_id="/210929_bFB2_teichoicase_recovery";
//num_channels = 2;
//scene_nums = 6;
//num_timesteps=271;

//expt_id="/211006_bFB2_teichoicase_recovery";
//num_channels = 2;
//scene_nums = 6;
//num_timesteps=181;

//expt_id="/211006_bFB1_teichoicase_recovery";
//num_channels = 2;
//scene_nums = 6;
//num_timesteps=181;

//expt_id="/211014_bFB1_teichoicase_tunicamycin_recovery";
//num_channels = 2;
//scene_nums = 7;
//num_timesteps=271;

//expt_id="/211019_bFB1_PBS_buffer_recov";
//num_channels = 2;
//scene_nums = 7;

//expt_id="/211020_bFB7_Tun";
//num_channels = 2;
//scene_nums = 6;
//
//expt_id="/211020_bFB8_Tun";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/211215_bFB66_Tun_gr";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/211215_bFB7_Tun_gr";
//num_channels = 2;
//scene_nums = 5;


//expt_id="/211216_bFB8_Tun_gr";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/211216_bFB66_Tun_gr";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/220105_bFB79_Tun_response";
//num_channels = 2;
//scene_nums = 7;

//expt_id="/220121_bFB67_Xyl_depletion";
//num_channels = 1;
//scene_nums = 7;

//expt_id="/220121_bFB66_Tun_gr";
//num_channels = 2;
//scene_nums = 7;

//expt_id="/220202_bFB66_Tun_Mg_gr";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/220204_bFB69_Tun_gr";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/220218_bFB66_Tun_gr_Mg";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/220223_bFB87_Tun_Mg_gr";
//num_channels = 2;
//scene_nums = 7;

//expt_id="/220224_bFB69_Tun_Mg_gr";
//num_channels = 2;
//scene_nums = 7;

//expt_id="/220303_bFB87_Tun_gr";
//num_channels = 2;
//scene_nums = 7;

//expt_id="/220304_bFB93_Tun_gr";
//num_channels = 2;
//scene_nums = 7;

//expt_id="/220309_bFB69_Tun_gr";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/220310_bFB93_Tun_gr";
//num_channels = 2;
//scene_nums = 8;

//expt_id="/220311_bFB87_Tun_gr";
//num_channels = 2;
//scene_nums = 7;

//expt_id="/210429_FB6_inducer_loss";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/210506_FB6_inducer_loss_timelapse";
//num_channels = 2;
//scene_nums = 6;

//
//expt_id="/220831_bFB145_Tun_gr";
//num_channels = 2;
//scene_nums = 4;


//expt_id="/220902_bFB149_Tun_gr";
//num_channels = 2;
//scene_nums = 4;

//expt_id="/220909_bFB145_Tun_gr";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/220916_bFB145_Tun_gr";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/221004_bFB145_Tun_gr";
//num_channels = 2;
//scene_nums = 4;

//
//expt_id="/221005_bFB149_Tun_gr";
//num_channels = 2;
//scene_nums = 4;

//expt_id="/221012_bFB69_Tun_gr";
//num_channels = 2;
//scene_nums = 4;


//expt_id="/221014_bFB154_Xyl_depl_gr";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/221021_bFB113_Tun_gr";
//num_channels = 2;
//scene_nums = 4;

//expt_id="/221021_bFB109_Tun_gr";
//num_channels = 2;
//scene_nums = 5;
//
//expt_id="/221025_bFB118_Tun_gr";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/221025_bFB113_Tun_gr";
//num_channels = 2;
//scene_nums = 5;
//
//expt_id="/221025_bFB109_Tun_gr";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/221110_bFB66_Tun_Amp_gr";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/221110_bFB66_Amp_gr";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/230314_bFB169_Mecillinam";
//num_channels = 2;
//scene_nums = 6;


//expt_id="/230314_bFB169_Mecillinam_Tun";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/230321_bFB7_Tun_lysis";
//num_channels = 2;
//scene_nums = 1;

//expt_id="/230327_bFB8_Tun_lysis";
//num_channels = 2;
//scene_nums = 6;


//expt_id="/230322_bFB69_Tun_lysis";
//num_channels = 2;
//scene_nums = 6;

//expt_id="/230331_bER47_Mecillinam_LB";
//num_channels = 2;
//scene_nums = 5;

//expt_id="/230331_bER47_Mecillinam_Tun_LB";
//num_channels = 2;
//scene_nums = 5;


for (alignment_scene=1; alignment_scene<scene_nums+1;alignment_scene++){
	temp_im_path=base_path+expt_id+expt_id+"_s"+IJ.pad(alignment_scene,3)+"_C1.tif";
	temp_val=alignment_scene-1;
	temp_im_path_original=base_path+expt_id+expt_id+".nd2 - Z="+temp_val+" C=0.tif";
	alt_temp_im_path_original=base_path+expt_id+expt_id+".nd2 - "+substring(expt_id, 1)+".nd2 (series "+alignment_scene+") - Z=0 C=0.tif";
	if( File.exists(temp_im_path)){
	    open(temp_im_path);	
	} else if(File.exists(temp_im_path_original)) {
		open(temp_im_path_original);	
	} else{
		open(alt_temp_im_path_original);	
	}
//	open(base_path+expt_id+expt_id+"_s"+IJ.pad(alignment_scene,3)+"_C1.tif");	
	myImageID = getImageID();  
	setTool(0);                                          //Rectangle tool 
	beep();                                              //alert the user
	waitForUser("Area Selection", "Select Rectangular Area to align relative to");
	selectImage(myImageID);                              //make sure we have the same foreground image again
	if (selectionType() != 0)                            //make sure we have got a rectangular selection
	exit("Sorry, no rectangle");
	run("Crop");
	if (File.isDirectory(base_path+expt_id+expt_id+"_reg_s"+IJ.pad(alignment_scene,3))==0){
		File.makeDirectory(base_path+expt_id+expt_id+"_reg_s"+IJ.pad(alignment_scene,3)) 
	}
	run("Image Sequence... ", "dir="+base_path+expt_id+expt_id+"_reg_s"+IJ.pad(alignment_scene,3)+"/ format=TIFF name="+substring(expt_id,1)+"_s"+IJ.pad(alignment_scene,3)+"_t"+" start=1");
	while (nImages>0) { 
  		selectImage(nImages); 
  		close(); 
	}
}